CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.+)_(?P<Plate>.+)_(?P<Well>.+)_site(?P<Site>[0-9]+)_(?P<Channel>.+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ER")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AGP")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Mito")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RNA")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:4
    Metadata category:Sample
    Metadata category:Plate
    Metadata category:Well
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold settings version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigAGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold settings version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei, Cells, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Select objects to measure:Nuclei, Cells, Cytoplasm

MeasureTexture:[module_num:10|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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Select objects to measure:Nuclei, Cells, Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

MeasureGranularity:[module_num:11|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enabled:False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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cells, Cytoplasm
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureCorrelation:[module_num:12|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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Select objects to measure:Nuclei, Cells, Cytoplasm
    Calculate correlation for all image pairs?:Yes
    Calculate correlation for all object pairs?:Yes

MeasureColocalization:[module_num:13|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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cells, Cytoplasm
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigDNA
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NucleiOutlines
    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Green
    Select objects to display:Cells

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
MeasureImageQuality:[module_num:19|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:3
    Threshold count:1
    Select the images to measure:OrigAGP, OrigDNA, OrigER, OrigMito, OrigRNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageIntensity:[module_num:20|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
    Select images to measure:OrigDNA, OrigER, OrigMito, OrigRNA, OrigAGP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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